OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)
Comment
  Alpha Dash 8-channel: OpenBCI GUI LSL data enters OpenViBE, selects eight hardware channels in the configured order, applies a 1-30 Hz band-pass, and creates 0.32 s epochs every 0.04 s. The first two selected channels are used for synchronous blink detection; all remaining selected channels are used for posterior 8-13 Hz alpha relative power. Change Channel List to match the actual electrode layout while keeping the two frontal channels first. A confirmed blink emits Label 01 and sends /openvibe/blink to brain_bridge.py.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "8 EEG channels (2 frontal + 6 posterior)"
  Channel List = 1;2;3;4;5;6;7;8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "EEG band filter 1-30 Hz"
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
-> Time based epoching "Low latency epoching"
  Epoch 1 duration (in sec) = 0.32
  Epoch 1 intervals (in sec) = 0.04
-> Alpha + blink controller
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/alpha_blink_openvibe_controller.py
  Blink detection window = 0.32
  Blink immediate z threshold = 12
  Blink absolute threshold = 35
  Blink z threshold = 5
  Blink release z = 1.8
  Blink refractory seconds = 0.85
  Blink warm-up seconds = 5
  Blink calibration window seconds = 3
  Blink minimum peak ratio = 2.2
  Blink confirmation windows = 2
  Blink smoothing seconds = 0.025
  Blink negative polarity ratio = 1.8
  Blink maximum pre-noise ratio = 0.30
  Blink minimum channel agreement = 0.45
  Blink minimum channel correlation = 0.75
  Blink maximum peak lag seconds = 0.12
  Blink minimum recovery ratio = 0.30
  Blink confirmation timeout seconds = 0.50
  Bridge URL = http://127.0.0.1:8766
-> Stimulation listener
  Log level to use = Information
