OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)
Comment
  EEG Horizon Run two-class SSVEP car controller. OpenViBE Acquisition client reads the OpenBCI GUI acquisition server, selects posterior channels 2;4;6, filters 4-32 Hz and creates 1.5 second epochs. The Python box uses regularized CCA reference scoring for 20 Hz left and 15 Hz right, requires two consecutive confirmations and neutral re-arming, then sends commands to brain_bridge.py at http://127.0.0.1:8766. Adjust Channel Selector to the actual posterior electrodes if the montage differs.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 2;4;6
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 32
-> Time based epoching
  Epoch 1 duration (in sec) = 1.5
  Epoch 1 intervals (in sec) = 0.25
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/ssvep_car_openvibe_controller.py
  Frequencies (Hz) = 20.0,15.0
  Minimum CCA score = 0.25
  Minimum score margin = 0.18
  Smoothing windows = 2
  Confirmation windows = 2
  Neutral unlock windows = 3
  Bridge URL = http://127.0.0.1:8766
-> Stimulation listener
  Log level to use = Information
