OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)
Comment
  Live OpenBCI LSL eye-state detector. Channel 9, 8-12 Hz alpha, 1 second windows every 0.5 seconds. First 20 windows are eyes-open baseline. Closed threshold = +50 percent; open threshold = +30 percent. Closed state requires 6 consecutive windows (about 3 seconds), so blinks remain eyes open. Label_01 = eyes closed, Label_00 = eyes open. Emits initial state once, then only state changes.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 9
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Simple DSP
  Equation = x*x
-> Signal average => #5
-> Python 3 scripting => #6
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/alpha_state_detector.py
  Closed threshold = 0.5
  Open threshold = 0.3
  Smoothing windows = 3
  Baseline windows = 20
  Confirmation windows = 2
  Minimum closed windows = 6
-> Stimulation listener
  Log level to use = Information
Data=#5, Stimulations=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 1
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
