OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)
Comment
  Direct 10-class SSVEP arithmetic demo for a 60 Hz display. Digit 0-9 use exact refresh-rate subharmonics: 5.00, 5.45, 6.00, 6.67, 7.50, 8.57, 10.00, 12.00, 15.00, 20.00 Hz. The UI shows one random arithmetic question and accepts three digits, including leading zeroes, for example 075. Channel 9 is the initial selection; replace it with a posterior channel after checking the OpenBCI montage. The Python box prints SSVEP_SCORE, SSVEP_ARMED, SSVEP_LOCKED and DIGIT_ACCEPTED.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 1;3;6
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 22
-> Time based epoching
  Epoch 1 duration (in sec) = 6
  Epoch 1 intervals (in sec) = 0.5
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/ssvep_arithmetic_controller.py
  Frequencies (Hz) = 5.0000,5.4545,6.0000,6.6667,7.5000,8.5714,10.0000,12.0000,15.0000,20.0000
  Minimum CCA score = 0.35
  Minimum score margin = 0.25
  Smoothing windows = 5
  Confirmation windows = 5
  Neutral unlock windows = 6
  UI server URL = http://127.0.0.1:8765
-> Stimulation listener
  Log level to use = Information
