OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)
Comment
  Grouped row-column SSVEP arithmetic demo for a 60 Hz display. First select one of four rows with 8.57, 10, 12 or 15 Hz. Then select one of three columns with 8.57, 10 or 12 Hz. The selected row and column identify digits 1-9; the center cell of row 4 is digit 0. Verified posterior channels are 1, 3 and 6. The Python box uses multichannel spectral SNR, phase coherence, score and margin gates, and consecutive-window confirmation.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 1;3;6
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 40
-> Time based epoching
  Epoch 1 duration (in sec) = 4
  Epoch 1 intervals (in sec) = 0.25
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/ssvep_grouped_arithmetic_controller.py
  Row frequencies (Hz) = 8.5714,10.0000,12.0000,15.0000
  Column frequencies (Hz) = 8.5714,10.0000,12.0000
  Minimum CCA score = 0.18
  Minimum score margin = 0.30
  Smoothing windows = 3
  Confirmation windows = 4
  Neutral unlock windows = 4
  UI server URL = http://127.0.0.1:8765
-> Stimulation listener
  Log level to use = Information
