OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.7.0)
Comment
  SSVEP media controller. Open ssvep_music_targets.html in a 60 Hz browser window. 10 Hz left target sends Windows Media Play once after 3 confirmed windows. 15 Hz right target sends Windows Media Pause once after 3 confirmed windows. After a command, 4 consecutive neutral windows are required before re-arming; a 5 second media cooldown also applies. Channel 9 is a starting value; replace it with the actual posterior electrode channel if needed.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector
  Channel List = 9
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 6
  High Cut-off Frequency (Hz) = 20
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/ssvep_music_controller.py
  Frequency A (Hz) = 10
  Frequency B (Hz) = 15
  Minimum SNR = 1.2
  Minimum score margin = 0.15
  Smoothing windows = 3
  Confirmation windows = 3
  Neutral unlock windows = 4
  Media cooldown (sec) = 5
-> Stimulation listener
  Log level to use = Information
